PsychoPy2experiment version="2022.1.4"
Settings
  Experiment info = {'participant': '', 'session': '001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = [1440, 900]
  color = 1.0000, 1.0000, 1.0000
  expName = cyberball
  keyboardBackend = ioHub
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Routines
  Routine setup
    CodeComponent code_setup
      Code Type = Py
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      Begin Routine:
        import sys
        import random
        import serial
        import os
        import time

        paths = [d for d in os.listdir('images') if d[1:3]=='to']
        throw={}
        for p in paths:
            imgs = [f for f in os.listdir('images/%s' % p) if f.endswith('.bmp')]
            # sort image filenames to get correct sequence of throw steps
            throw[p]= sorted(imgs)

        def select_player_image(fromP, toP, s):
            key = "%ito%i" % (fromP,toP)

            player_img = ('images/%s/%s-%s.bmp' % (key, key, s))
            return player_img

        def select_throw(holder, block_threshold):
            if holder==2:
                #got_ball_time = trialClock.getTime()

                choice=[]
                while len(choice)==0 or choice [0] not in ('2','3'):
                    choice = event.getKeys(keyList=['2','3'])
                if choice[0]=='2':
                    throwTo=1
                elif choice[0]=='3':
                    throwTo=3

            else:
                throwChoice = random.random()
                if throwChoice > block_threshold:
                    if holder==1:
                        throwTo=3
                    else:
                        throwTo=1
                else:
                    throwTo=2

            return holder, throwTo
  Routine test
    CodeComponent code_2
      Code Type = Auto->JS
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      Begin Routine:
        # Virtual Ball Toss Game
        # version of 'Cyberball' - https://www.ncbi.nlm.nih.gov/pubmed/16817529
        # for PsychoPy (using Python2.7+)

        # developed by for use as an fMRI task by the Communication Neuroscience Lab
        # original Matlab implementation by Josh Carp
        # PsychoPy Python version by Matt O'Donnell (mbod@asc.upenn.edu)

        # updated/refactored and tested on PsychoPy 2021.2.3
        # 12/17/21 mbod@asc.upenn.edu

        from __future__ import absolute_import, division, print_function
        from psychopy import visual, core, logging, event,data, gui

        import sys
        import random
        import csv
        import serial
        import os
        import time

        #################
        #  PARAMETERS #
        #################

        maxTime=178
        maxTrials=178
        holder=1
        round=1
        trialCnt=0
        rndCnt=0
        condition="FBALL"

        instructions1 = '''
        In the upcoming task, we will test the effects of practicing mental visualization on task performance. Thus, we need you to practice your mental visualization skills. We have found that the best way to do this is to have you play an on-line ball tossing game with other participants who are logged on to the system at the same time.

        In a few moments, you will be playing a ball-tossing game with other students over our network. Several universities in the state of Michigan are taking part in a collaborative investigation of the effects of mental visualization on task performance, with high school students participating at several different Universities around the state of Michigan.
        '''

        instructions2 = '''
        The game is very simple. When the ball is tossed to you, simply press either the "2" key (pointer finger) to throw to the player on your left or the "3" key (middle finger) for to throw to the player on your right. When the game is over, the experimenter will give you additional instructions.

        What is important is not your ball tossing performance, but that you MENTALLY VISUALIZE the entire experience. Imagine what the others look like. What sort of people are they? Where are you playing? Is it warm and sunny or cold and rainy? Create in your mind a complete mental picture of what might be going on if you were playing this game in real life.
        '''


        # get subjID
        subjDlg = gui.Dlg(title="App Task")
        subjDlg.addField('Enter Subject ID:')
        subjDlg.addField('Player name:')
        subjDlg.addField("Room:")
        subjDlg.show()

        if gui.OK:
            subj_id=subjDlg.data[0]
            player_name=subjDlg.data[1]
            try:
                room = int(subjDlg.data[2])-1
            except:
                room=0
        else:
            sys.exit()


        players=[
                ["Justin", "Will"],  # Names of Room 0 players
                ["Nick", "Robin"],   # Names of Room 1 players
                ["John", "Andrew"]   # Names of Room 2 players
                ]

        player1_name, player3_name = players[room]


        ################
        # Set up images #
        ################
        paths = [d for d in os.listdir('images') if d[1:3]=='to']
        throw={}
        for p in paths:
            imgs = [f for f in os.listdir('images/%s' % p) if f.endswith('.bmp')]
            # sort image filenames to get correct sequence of throw steps
            throw[p]= sorted(imgs)

        ################
        # Set up window #
        ################

        useFullScreen=True # True
        win = visual.Window(monitor="testMonitor",
                            units="deg", fullscr=useFullScreen,
                            allowGUI=False, color="#FFFFFF")

        ################
        # Set up stimuli #
        ################

        title=visual.TextStim(win,text="Welcome to the Virtual Ball-Tossing Game, an Interactive Task Used for Mental Visualization!", height=0.8, pos=(0,6),color="#000000")
        instrText = visual.TextStim(win, text="",height=0.6, color="#000000", wrapWidth=16)
        instrKey = visual.TextStim(win, text="", height=0.6, color="#000000", pos=(0,-5))
        instr_p1 = visual.TextStim(win, text="",color="#000000", pos=(-6,3), height=0.6, alignHoriz="left")
        instr_p2 = visual.TextStim(win, text="",color="#000000", pos=(-6, 0), height=0.6, alignHoriz="left")
        instr_p3 = visual.TextStim(win, text="",color="#000000", pos=(-6, -3), height=0.6, alignHoriz="left")
        p1_tick = visual.TextStim(win,text="", color="#000000", pos=(3.5,3.15), alignHoriz="left")
        p3_tick = visual.TextStim(win,text="", color="#000000", pos=(3.5,-2.85), alignHoriz="left")

        players = visual.ImageStim(win, image='images/start.bmp')

        round_fix = visual.TextStim(win, text="", height=1.5, color="#000000")

        fixation = visual.TextStim(win, text="+", height=2, color="#000000")

        goodbye = visual.TextStim(win,text="",color="#000000")

        p1name = visual.TextStim(win,text=player1_name,color="#000000", pos=(-6,2), height=0.5)
        p2name = visual.TextStim(win,text=player_name,color="#000000", pos=(0,-5), height=0.5)
        p3name = visual.TextStim(win,text=player3_name,color="#000000", pos=(6,2), height=0.5)
        ready_screen = visual.TextStim(win, text="Ready.....", height=1.2, color="#000000")



        def show_instructions():
            title.setAutoDraw(True)
            instrText.setText(instructions1)
            instrText.setAutoDraw(True)
            win.flip()
            #core.wait(20)
            instrKey.setText("PRESS 2 [pointer finger] to continue")
            instrKey.draw()
            win.flip()
            event.waitKeys(keyList=['2'])
            instrText.setText(instructions2)
            win.flip()
            #core.wait(20)
            instrKey.setText("PRESS 3 [middle finger] to begin...")
            instrKey.draw()
            win.flip()
            event.waitKeys(keyList=['3'])
            instrText.setAutoDraw(False)

            p1_ticker="."
            p3_ticker="."
            p1_ticker_end=120
            p3_ticker_end=425

            title.setText('Joining VBT Game Room')
            instr_p1.setText("PLAYER 1: Wating for player to join")
            instr_p2.setText("PLAYER 2: Welcome %s" % player_name)
            instr_p3.setText("PLAYER 3: Wating for player to join")
            instr_p1.setAutoDraw(True)
            instr_p2.setAutoDraw(True)
            instr_p3.setAutoDraw(True)
            p1_tick.setAutoDraw(True)
            p3_tick.setAutoDraw(True)
            win.flip()
            for tick in range(500):
                if tick == p1_ticker_end:
                    instr_p1.setText("PLAYER 1: Welcome %s" % player1_name)
                    p1_tick.setAutoDraw(False)
                elif tick == p3_ticker_end:
                    instr_p3.setText("PLAYER 3: Welcome %s" % player3_name)
                    p3_tick.setAutoDraw(False)
                else:
                    if tick % 10 == 0:
                        p1_ticker = p1_ticker + "."
                        if len(p1_ticker)>6:
                            p1_ticker=""
                    if tick % 12 == 0:
                        p3_ticker = p3_ticker + "."
                        if len(p3_ticker)>6:
                            p3_ticker=""
                    if tick < p1_ticker_end:
                        p1_tick.setText(p1_ticker)
                    if tick < p3_ticker_end:
                        p3_tick.setText(p3_ticker)
                win.flip()
            core.wait(2)

            title.setAutoDraw(False)
            instr_p1.setAutoDraw(False)
            instr_p2.setAutoDraw(False)
            instr_p3.setAutoDraw(False)

        def player_names(state=True):
            p1name.setAutoDraw(state)
            p2name.setAutoDraw(state)
            p3name.setAutoDraw(state)

        def throw_ball(fromP, toP):
            global trialCnt, holder, rndCnt
            key = "%ito%i" % (fromP,toP)

            logging.log(level=logging.DATA, msg="round %i - trial %i - throw: %s - %s" % (round, trialCnt, key, condition))

            for s in throw[key]:
                players.setImage('images/%s/%s' % (key,s))
                players.draw()
                win.flip()
                core.wait(0.15)

            trialCnt+=1
            rndCnt+=1
            holder=toP
            logging.flush()
            select_throw()

        def select_throw():
            global condition
            if holder==2:
                logging.log(level=logging.DATA,msg="PLAYER HAS BALL")
                got_ball_time = trialClock.getTime()

                choice=[]
                while len(choice)==0 or choice [0] not in ('2','3'):
                    core.wait(0.01)
                    if trialCnt > maxTrials or trialClock.getTime() > maxTime:
                        return
                    choice = event.getKeys(keyList=['2','3'])
                if choice[0]=='2':
                    throwTo=1
                elif choice[0]=='3':
                    throwTo=3

                logging.log(level=logging.DATA,msg="PLAYER THROWS TO %i - RT %0.4f" % (throwTo, trialClock.getTime()-got_ball_time))
            else:
                core.wait(random.randint(500,3500)/1000)

                if round==2 and rndCnt>8:
                    condition="UBALL"
                    ft=0.5
                else:
                    ft=0.0

                throwChoice = random.random() - ft
                if throwChoice < 0.5:
                    if holder==1:
                        throwTo=3
                    else:
                        throwTo=1
                else:
                    throwTo=2

            if trialCnt > maxTrials or trialClock.getTime() > maxTime:
                return
            else:
                throw_ball(holder,throwTo)

        # start

        def play_round():
            global rndCnt
            rndCnt=0
            logging.log(level=logging.DATA, msg="Displaying Round %i label" % round)
            round_fix.setText("Round %i" % round)
            round_fix.draw()
            win.flip()
            core.wait(2)
            logging.log(level=logging.DATA, msg="Starting Round %i" % round)
            trialClock.reset()
            players.draw()
            player_names(True)
            win.flip()
            core.wait(0.2)
            select_throw()
            player_names(False)
            fixation.draw()
            win.flip()
            core.wait(5)


        # ================================

        show_instructions()
        ready_screen.setText("OK - here we go!!!")
        ready_screen.draw()
        win.flip()
        event.waitKeys(keyList=['space'])

        # setup logging #
        log_file = logging.LogFile("logs/%s.log" % (subj_id),  level=logging.DATA, filemode="w")

        #################
        # Trigger scanner #
        #################
        globalClock = core.Clock()
        trialClock = core.Clock()
        logging.setDefaultClock(globalClock)

        # ADD TRIGGER CODE - 255 on serial port - if scanner is expecting to receive a 'start' trigger
        # from task
        # some scanners may send a trigger code (i.e. a '5' or a 't') on each TR
        # in which case code here should be adapted (or above where task waits for a space bar to start)
        try:
            ser = serial.Serial('/dev/tty.KeySerial1', 9600, timeout=1)
            ser.write('0')
            time.sleep(0.1)
            ser.write('255')
            ser.close()
        except:
            print("SCANNER NOT TRIGGERED")
            pass
        # end of trigger code

        logging.log(level=logging.DATA, msg="START")

        # 8 sec disdaq
        fixation.setText("+")
        fixation.draw()
        win.flip()
        core.wait(8)

        round=1
        play_round()
        holder=1
        round=2
        play_round()

        goodbye.setText("Game Over!\nThanks for playing %s." % player_name)
        goodbye.draw()
        win.flip()
        core.wait(7.5)
        logging.log(level=logging.DATA, msg="END")
  Routine instruct_2
    TextComponent text_2
      color = black
      letterHeight = 0.03
      startVal [time (s)] = 0.0
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      text:
        The game is very simple. When the ball is tossed to you, simply press either the "2" key (pointer finger) to throw to the player on your left or the "3" key (middle finger) for to throw to the player on your right. When the game is over, the experimenter will give you additional instructions.

        What is important is not your ball tossing performance, but that you MENTALLY VISUALIZE the entire experience. Imagine what the others look like. What sort of people are they? Where are you playing? Is it warm and sunny or cold and rainy? Create in your mind a complete mental picture of what might be going on if you were playing this game in real life.

        Press SPACE to start.
    KeyboardComponent key_resp_3
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine game_start
    CodeComponent code_6
      Code Type = Auto->JS
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      Begin Routine:
        game_i = 1
    TextComponent text
      color = black
      letterHeight = 0.03
      startVal [time (s)] = 0.0
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      text:
        In the upcoming task, we will test the effects of practicing mental visualization on task performance. Thus, we need you to practice your mental visualization skills. We have found that the best way to do this is to have you play an on-line ball tossing game with other participants who are logged on to the system at the same time.

        In a few moments, you will be playing a ball-tossing game with other students over our network. Several universities in the state of New York are taking part in a collaborative investigation of the effects of mental visualization on task performance, with people participating at several different universities around the state of New York.

        Press SPACE to continue.
    KeyboardComponent key_resp_2
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine block_start
    CodeComponent code_7
      Code Type = Auto->JS
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      Begin Routine:
        block_threshold = .67
  Routine block_end
    TextComponent text_11
      color = black
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      text [set every repeat] = $"You have reached the end of game " + str(game_i) + ".\n\n Press SPACE to continue."
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    KeyboardComponent key_resp_4
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    CodeComponent code_8
      Code Type = Auto->JS
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      End Routine:
        game_i += 1
  Routine loading
    TextComponent text_12
      color = black
      letterHeight = 0.05
      pos = (0, .2)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 8
      text = Loading...
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    TextComponent text_13
      color = black
      letterHeight = 0.05
      pos = (0, .1)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5
      text = Finding other players...
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    TextComponent text_14
      color = black
      letterHeight = 0.05
      startVal [time (s)] = 0
      stopVal [duration (s)] = 8
      text = Player 1: You
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    TextComponent text_17
      color = black
      letterHeight = 0.05
      pos = (0, -.1)
      startVal [time (s)] = 3
      stopVal [duration (s)] = 5
      text = Player 2 found!
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    TextComponent text_15
      color = black
      letterHeight = 0.05
      pos = (0, -.2)
      startVal [time (s)] = 5
      stopVal [duration (s)] = 3
      text = Player 3 found!
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    TextComponent text_16
      color = black
      letterHeight = 0.05
      startVal [time (s)] = 8
      stopVal [duration (s)] = 5
      text = Get ready to begin!
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  Routine trial_2
    CodeComponent code_9
      Code Type = Auto->JS
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      Begin Routine:
        holder = 1
        player_img = "images/start.bmp"
    ImageComponent start_2
      color = 1.0000, 1.0000, 1.0000
      image [set every repeat] = $player_img
      interpolate = nearest
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.5
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    TextComponent text_18
      color = black
      letterHeight = 0.05
      pos = (-.2, .25)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.5
      text = Player 2
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    TextComponent text_19
      color = black
      letterHeight = 0.05
      pos = (.2, .25)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.5
      text = Player 3
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  Routine cyberball_1
    CodeComponent code_4
      Code Type = Auto->JS
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      Begin Routine:
        holder = 1
        player_img = "images/start.bmp"
    ImageComponent start
      color = 1.0000, 1.0000, 1.0000
      image [set every repeat] = $player_img
      interpolate = nearest
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.5
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    TextComponent text_7
      color = black
      letterHeight = 0.05
      pos = (-.2, .25)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.5
      text = Player 2
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    TextComponent text_8
      color = black
      letterHeight = 0.05
      pos = (.2, .25)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.5
      text = Player 3
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  Routine cyberball_2
    CodeComponent code
      Code Type = Auto->JS
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      Begin Routine:
        s = 1
        img_length = 3

        if holder == 2:
            core.wait(0.01)
        else:
            core.wait(random.randint(500, 3500)/1000)
            img_length = .2

        player = select_throw(holder, block_threshold)
        holder = player[0]
        next_holder = player[1]

        player_img = select_player_image(holder, next_holder, s)

        nreps = len(throw["%ito%i" % (holder,next_holder)])

        #print("current holder: ", holder, "next_holder: ", next_holder, "Key: ", "%ito%i" % (holder,next_holder), "nreps:", nreps)
      Each Frame:
        if (holder == 2) and (key_resp.keys == '2' or key_resp.keys == '3'):
            continueRoutine = False
    ImageComponent image
      image [set every repeat] = $player_img
      interpolate = nearest
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $img_length
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    KeyboardComponent key_resp
      allowedKeys = '2','3'
      forceEndRoutine = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $img_length
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    TextComponent text_3
      color = black
      letterHeight = 0.05
      pos = (-.2, .25)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $img_length
      text = Player 2
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    TextComponent text_4
      color = black
      letterHeight = 0.05
      pos = (.2, .25)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $img_length
      text = Player 3
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  Routine cyberball_3
    CodeComponent code_3
      Code Type = Auto->JS
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      Begin Routine:
        player_img = select_player_image(holder, next_holder, s)
      End Routine:
        s+=1
    TextComponent text_5
      color = black
      letterHeight = 0.05
      pos = (-.2, .25)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = .15
      text = Player 2
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    TextComponent text_6
      color = black
      letterHeight = 0.05
      pos = (.2, .25)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = .15
      text = Player 3
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    ImageComponent image_2
      image [set every repeat] = $player_img
      interpolate = nearest
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = .15
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  Routine cyberball_4
    CodeComponent code_5
      Code Type = Auto->JS
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      End Routine:
        holder = next_holder
        s = 1
    ImageComponent image_3
      image [set every repeat] = $player_img
      interpolate = nearest
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = .15
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    TextComponent text_9
      color = black
      letterHeight = 0.05
      pos = (-.2, .25)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = .15
      text = Player 2
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    TextComponent text_10
      color = black
      letterHeight = 0.05
      pos = (.2, .25)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = .15
      text = Player 3
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  Routine prac_cb_1
    CodeComponent code_10
      Code Type = Auto->JS
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      Begin Routine:
        holder = 1
        player_img = "images/start.bmp"
    ImageComponent start_3
      color = 1.0000, 1.0000, 1.0000
      image [set every repeat] = $player_img
      interpolate = nearest
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.5
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    TextComponent text_20
      color = black
      letterHeight = 0.05
      pos = (-.2, .25)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.5
      text = Player 2
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    TextComponent text_21
      color = black
      letterHeight = 0.05
      pos = (.2, .25)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.5
      text = Player 3
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  Routine prac_cb_2
    CodeComponent code_11
      Code Type = Auto->JS
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      Begin Routine:
        s = 1
        img_length = 3

        if holder == 2:
            core.wait(0.01)
        else:
            core.wait(random.randint(500, 3500)/1000)
            img_length = .2

        player = select_throw(holder, block_threshold)
        holder = player[0]
        next_holder = player[1]

        player_img = select_player_image(holder, next_holder, s)

        nreps = len(throw["%ito%i" % (holder,next_holder)])

        #print("current holder: ", holder, "next_holder: ", next_holder, "Key: ", "%ito%i" % (holder,next_holder), "nreps:", nreps)
      Each Frame:
        if (holder == 2) and (key_resp.keys == '2' or key_resp.keys == '3'):
            continueRoutine = False
    ImageComponent image_4
      image [set every repeat] = $player_img
      interpolate = nearest
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $img_length
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    KeyboardComponent key_resp_5
      allowedKeys = '2','3'
      forceEndRoutine = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $img_length
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    TextComponent text_22
      color = black
      letterHeight = 0.05
      pos = (-.2, .25)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $img_length
      text = Player 2
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    TextComponent text_23
      color = black
      letterHeight = 0.05
      pos = (.2, .25)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $img_length
      text = Player 3
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  Routine prac_cb_3
    CodeComponent code_12
      Code Type = Auto->JS
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      Begin Routine:
        player_img = select_player_image(holder, next_holder, s)
      End Routine:
        s+=1
    TextComponent text_24
      color = black
      letterHeight = 0.05
      pos = (-.2, .25)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = .15
      text = Player 2
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    TextComponent text_25
      color = black
      letterHeight = 0.05
      pos = (.2, .25)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = .15
      text = Player 3
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    ImageComponent image_5
      image [set every repeat] = $player_img
      interpolate = nearest
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = .15
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  Routine prac_cb_4
    CodeComponent code_13
      Code Type = Auto->JS
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      End Routine:
        holder = next_holder
        s = 1
    ImageComponent image_6
      image [set every repeat] = $player_img
      interpolate = nearest
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = .15
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    TextComponent text_26
      color = black
      letterHeight = 0.05
      pos = (-.2, .25)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = .15
      text = Player 2
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    TextComponent text_27
      color = black
      letterHeight = 0.05
      pos = (.2, .25)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = .15
      text = Player 3
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  Routine practice_start
    TextComponent text_28
      color = black
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        Let's begin the practice. Remember, when it's your turn to throw, press the XXX key to throw to Player 3 and the XXX key to throw the ball to Player 3.

        Ready?
    KeyboardComponent key_resp_6
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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    CodeComponent code_14
      Code Type = Auto->JS
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      Begin Routine:
        block_threshold = .8
  Routine practice_end
    TextComponent text_29
      color = black
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      text = You have finished the practice.
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    KeyboardComponent key_resp_7
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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Flow
  Routine setup
  Routine game_start
  Routine instruct_2
  LoopInitiator practice_block loopType="TrialHandler"
    loopType = random
    nReps = 1
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    Routine practice_start
    Routine prac_cb_1
    LoopInitiator prac_cb_trials_2 loopType="TrialHandler"
      loopType = random
      nReps = 10
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      Routine prac_cb_2
      LoopInitiator prac_cb_trials loopType="TrialHandler"
        loopType = random
        nReps = nreps
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        Routine prac_cb_3
      LoopTerminator prac_cb_trials
      Routine prac_cb_4
    LoopTerminator prac_cb_trials_2
    Routine practice_end
  LoopTerminator practice_block
  Routine loading
  LoopInitiator game_block loopType="TrialHandler"
    conditionsFile = routine_conditions/cyberball.csv
    loopType = sequential
    nReps = 1
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    conditions:
      [OrderedDict([('block_threshold', 0.67)]),
      OrderedDict([('block_threshold', 0.33)]),
      OrderedDict([('block_threshold', 0.2)])]
    Routine cyberball_1
    LoopInitiator cb_trials_2 loopType="TrialHandler"
      loopType = random
      nReps = 10
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      Routine cyberball_2
      LoopInitiator cb_trials loopType="TrialHandler"
        loopType = random
        nReps = nreps
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        Routine cyberball_3
      LoopTerminator cb_trials
      Routine cyberball_4
    LoopTerminator cb_trials_2
    Routine block_end
  LoopTerminator game_block
