PsychoPy2experiment version="2022.1.4"
Settings
  Experiment info = {'participant': ''}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = [1440, 900]
  color = 1.0000, 1.0000, 1.0000
  expName = raceface
  keyboardBackend = ioHub
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Routines
  Routine fixation
    CodeComponent code_4
      Code Type = Auto->JS
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      Begin Routine:
        trial_n = 0
        face_n = list(range(0,n_files))
        random.shuffle(face_n)
    TextComponent text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text = +
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  Routine face_present
    CodeComponent code
      Code Type = Py
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      Begin Routine:
        image_present = "face_stim/" + race_condition + str(face_n[trial_n]) + ".jpg"
      End Routine:
        trial_n += 1
    ImageComponent image
      image [set every repeat] = $image_present
      saveStartStop = False
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $facepresent_time
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  Routine setup
    CodeComponent code_2
      Code Type = Auto->JS
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      Begin Experiment:
        import random

        total_time = 40 # seconds
        facepresent_time = 10 # seconds
        num_faces = total_time/facepresent_time # has to be a round number
  Routine trial_setup
    CodeComponent code_3
      Code Type = Auto->JS
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      Begin Routine:
        trial_n = 0
Flow
  Routine setup
  LoopInitiator block loopType="TrialHandler"
    conditionsFile = routine_conditions/raceface.csv
    loopType = random
    nReps = 2
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    conditions:
      [OrderedDict([('race_condition', 'black')]),
      OrderedDict([('race_condition', 'white')]),
      OrderedDict([('race_condition', 'hisp_asian')])]
    Routine fixation
    LoopInitiator trials loopType="TrialHandler"
      loopType = random
      nReps = num_faces
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      Routine face_present
    LoopTerminator trials
  LoopTerminator block
