PsychoPy2experiment version="2023.1.3"
Settings
  Data filename = u'%s/%s_%s_%s' % (expInfo['output folder'], expInfo['participant'], expName, expInfo['date'])
  Experiment info = {'participant': '', 'scheduler csv': 'block_scheduler.csv', 'output folder': 'Results/'}
  Full-screen window = False
  Monitor = testMonitor
  Screen = 2
  Units = height
  Window size (pixels) = [1920, 1080]
  color = 1.0000, 1.0000, 1.0000
  expName = Scheduler
  keyboardBackend = ioHub
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Routines
  Routine end
    TextComponent end_text
      color = black
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        You have reached the end of the experiment. Thank you!

        Press SPACE to end.
    KeyboardComponent key_resp_3
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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  Routine practice_end
    TextComponent text_7
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        You have finished the practice trials. If you have any questions, please ask your experimenter now.

        Next, you will begin the real trials. These will be exactly the same, except you will no longer receive feedback.

        When you are ready, press SPACE to begin.
    KeyboardComponent key_resp_5
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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    CodeComponent code_8
      Code Type = Auto->JS
  Routine setup
    CodeComponent exp_monitor
      Code Type = Py
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      Begin Experiment:
        import tkinter as tk
        import threading
        import tkinter.font as tkFont
        import tkinter.ttk as ttk
        import asyncio
        import websockets
        from psychopy.hardware import keyboard
        from psychopy import core
        import pandas as pd

        # create shared lock
        current_selection = 0
        force_end_routine = False
        pause_routine = True
        lock = threading.Lock()
        timer = None

        scheduler_csv_data = pd.read_csv(expInfo['scheduler csv'])
        sched_header = list(scheduler_csv_data.columns)
        sched_list = scheduler_csv_data.values.tolist()

        class MainApplication(tk.Frame):
            def __init__(self, parent, current_selection, pause_routine, *args, **kwargs):
                tk.Frame.__init__(self, parent, *args, **kwargs)
                self.parent = parent
                #setting title
                parent.title("Experiment Scheduler")
                #setting window size
                self.started = False # turned on after start
                width=800
                height=500
                #width=1000
                #height=800
                self.width = width
                self.height = height
                screenwidth = self.winfo_screenwidth()
                screenheight = self.winfo_screenheight()
                #alignstr = '%dx%d+%d+%d' % (width, height, -screenwidth/2, (screenheight - height) / 2 + 40)
                alignstr = '%dx%d+%d+%d' % (width, height, screenwidth/2, (screenheight - height) / 2)
                parent.geometry(alignstr)
                parent.resizable(width=False, height=False)

                self.selection = current_selection
                self.pause_routine = pause_routine
                self.countdown_params = None

                self.counter = tk.Label(self,font=(None, 15),bg= "gray90")
                self.counter.place(x=width//30,y=height//3.5,width=width//8.6,height=height//20)
                self.countdown(5,method='up',selection=current_selection)

                self.UpButton=tk.Button(self,state='disabled')
                self.UpButton["bg"] = "#f0f0f0"
                ft = tkFont.Font(family='Times',size=10)
                self.UpButton["font"] = ft
                self.UpButton["fg"] = "#000000"
                self.UpButton["justify"] = "center"
                self.UpButton["text"] = "Previous"
                self.UpButton.place(x=width//30,y=height//2.5,width=width//8.6,height=height//20)
                self.UpButton["command"] = self.UpButton_command

                self.DownButton=tk.Button(self,state='disabled')
                self.DownButton["bg"] = "#f0f0f0"
                ft = tkFont.Font(family='Times',size=10)
                self.DownButton["font"] = ft
                self.DownButton["fg"] = "#000000"
                self.DownButton["justify"] = "center"
                self.DownButton["text"] = "Next"
                self.DownButton.place(x=width//30,y=height//2.08,width=width//8.6,height=height//20)
                self.DownButton["command"] = self.DownButton_command

                self.StartButton=tk.Button(self)
                self.StartButton["bg"] = "#f0f0f0"
                ft = tkFont.Font(family='Times',size=10)
                self.StartButton["font"] = ft
                self.StartButton["fg"] = "#000000"
                self.StartButton["justify"] = "center"
                self.StartButton["text"] = "Start"
                self.StartButton.place(x=width//4.5,y=height//5.56,width=width//8.6,height=height//20)
                self.StartButton["command"] = self.StartButton_command

                self.PauseButton=tk.Button(self)
                self.PauseButton["bg"] = "#f0f0f0"
                ft = tkFont.Font(family='Times',size=10)
                self.PauseButton["font"] = ft
                self.PauseButton["fg"] = "#000000"
                self.PauseButton["justify"] = "center"
                self.PauseButton["text"] = "Pause"
                self.PauseButton.place(x=width//1.5,y=height//5.56,width=width//8.6,height=height//20)
                self.PauseButton["command"] = self.PauseButton_command

                self.tree = None
                self._setup_widgets()
                self._build_tree()


                self.tree.focus_set()
                self.children = self.tree.get_children()
                if self.children:
                    self.tree.focus(self.children[self.selection])
                    self.tree.selection_set(self.children[self.selection])

                thd_as = threading.Thread(target=self.run_asyncio_server)   # gui thread
                thd_as.daemon = True  # background thread will exit if main thread exits
                thd_as.start()  # start tk loop

            def countdown(self, count, selection, method='down',set_color=True):
                # ensure we need to continue counting
                if self.pause_routine:
                    self.counter['text'] = 'PAUSED'
                    return
                if selection != self.selection:
                    return
                # change text in label
                self.counter['text'] = "{:.2f}".format(count)
                if method=='down' and count > 0:
                    if set_color:
                        self.counter.config(fg="red")
                    # call countdown again after 10ms
                    self.parent.after(10, self.countdown, round(count-.01,2), selection, method,False)
                elif method=='up':
                    if set_color:
                        self.counter.config(fg="blue")
                    # call countdown again after 10ms
                    self.parent.after(10, self.countdown, round(count+.01,2), selection, method,False)

            def run_asyncio_server(self):
                async def handler(websocket, path):
                    data = await websocket.recv()
                    if data=='next':
                        self.move_focus_down()
                    elif data=='last':
                        self.move_focus_up()
                    reply = f"Data recieved bro as:  {data} selection {self.selection}!"
                    await websocket.send(reply)
                loop = asyncio.new_event_loop()
                asyncio.set_event_loop(loop)
                start_server = websockets.serve(handler, "localhost", 8000)
                asyncio.get_event_loop().run_until_complete(start_server)
                asyncio.get_event_loop().run_forever()

            def move_focus_down(self):
                if len(self.children)-1 == self.selection: # reset
                    return
                last_selection = self.selection
                self.selection += 1
                if self.children and len(self.children) > self.selection:
                    self.tree.focus(self.children[self.selection])
                    self.tree.selection_set(self.children[self.selection])

                this_child = self.tree.item(self.children[self.selection])["values"]
                method = 'up' if float(this_child[2]) == 0 else 'down'
                self.countdown_params = (float(this_child[2]), self.selection, method)
                self.countdown(float(this_child[2]),selection=self.selection,method=method)
                global current_selection, force_end_routine, pause_routine
                with lock:
                    if last_selection != self.selection:
                        force_end_routine = True
                    current_selection = self.selection

            def move_focus_up(self):
                if self.selection == 0: # if we hit the start
                    return

                last_selection = self.selection
                self.selection -= 1
                if self.children and self.selection >= 0:
                    self.tree.focus(self.children[self.selection])
                    self.tree.selection_set(self.children[self.selection])
                #if self.selection == -1: # reset
                    # self.selection = len(self.children)-1
                this_child = self.tree.item(self.children[self.selection])["values"]
                method = 'up' if float(this_child[2]) == 0 else 'down'
                self.countdown_params = (float(this_child[2]), self.selection, method)
                self.countdown(float(this_child[2]),selection=self.selection,method=method)
                global current_selection, force_end_routine, pause_routine
                with lock:
                    if last_selection != self.selection:
                        force_end_routine = True
                    current_selection = self.selection

            def _setup_widgets(self):
                s = """\click on header to sort by that column
                    to change width of column drag boundary
                    """
                # msg = ttk.Label(wraplength="4i", justify="left", anchor="n",
                #    padding=(10, 2, 10, 6), text=s)
                #msg.pack(fill='x')
                container = ttk.Frame()
                # container.pack(fill='both', expand=True)
                container.place(x=self.width//4.6,y=self.height//3.57,width=self.width//1.4,height=self.height//1.5)
                # create a treeview with dual scrollbars
                self.tree = ttk.Treeview(columns=sched_header, show="headings", selectmode='none')
                vsb = ttk.Scrollbar(orient="vertical",
                    command=self.tree.yview)
                hsb = ttk.Scrollbar(orient="horizontal",
                    command=self.tree.xview)
                self.tree.configure(yscrollcommand=vsb.set,
                    xscrollcommand=hsb.set)
                self.tree.grid(column=0, row=0, sticky='nsew', in_=container)
                vsb.grid(column=1, row=0, sticky='ns', in_=container)
                hsb.grid(column=0, row=1, sticky='ew', in_=container)
                container.grid_columnconfigure(0, weight=1)
                container.grid_rowconfigure(0, weight=1)

            def _build_tree(self):
                for col in sched_header:
                    self.tree.heading(col, text=col.title())
                    # adjust the column's width to the header string
                    self.tree.column(col,
                        width=tkFont.Font().measure(col.title()))

                for item in sched_list:
                    self.tree.insert('', 'end', values=item)
                    # adjust column's width if necessary to fit each value
                    for ix, val in enumerate(item):
                        col_w = tkFont.Font().measure(val)
                        if self.tree.column(sched_header[ix],width=None)<col_w:
                            self.tree.column(sched_header[ix], width=col_w)

            def UpButton_command(self):
                if self.started:
                    self.move_focus_up()


            def DownButton_command(self):
                if self.started:
                    self.move_focus_down()


            def StartButton_command(self):
                if not self.started:
                    self.started = True
                    self.UpButton['state'] = 'normal'
                    self.DownButton['state'] = 'normal'
                    self.StartButton['state'] = 'disabled'
                    this_child = self.tree.item(self.children[self.selection])["values"]
                    method = 'up' if float(this_child[2]) == 0 else 'down'
                    self.countdown_params = (float(this_child[2]), self.selection, method)
                global current_selection, force_end_routine, pause_routine
                with lock:
                    if self.pause_routine:
                        self.pause_routine = False
                        self.PauseButton['state'] = 'normal'
                        self.StartButton['state'] = 'disabled'
                        self.countdown(self.countdown_params[0],selection=self.countdown_params[1],method=self.countdown_params[2])
                    pause_routine = self.pause_routine


            def PauseButton_command(self):
                global current_selection, force_end_routine, pause_routine
                with lock:
                    if not self.pause_routine:
                        self.pause_routine = True
                        force_end_routine = True # this may be changed depending on preferred pause behavior
                        self.StartButton['state'] = 'normal'
                        self.PauseButton['state'] = 'disabled'
                    pause_routine = self.pause_routine

        def runtk(current_selection, pause_routine):  # runs in background thread
            root = tk.Tk()
            MainApplication(root, current_selection, pause_routine).pack(side="top", fill="both", expand=True)
            root.mainloop()

        thd = threading.Thread(target=runtk, args=(current_selection,pause_routine,))   # gui thread
        thd.daemon = True  # background thread will exit if main thread exits
        thd.start()  # start tk loop
      Each Frame:
        if not pause_routine:
            continueRoutine=False
    CodeComponent exp_setup
      Code Type = Auto->JS
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      Begin Experiment:
        from psychopy.hardware import keyboard
        from psychopy import core
        import time


        presented_images = []
        game_i = 1
    KeyboardComponent key_resp
      allowedKeys = 'space'
      disabled = True
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    TextComponent setup_waiter
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.0
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  Routine print_row
    TextComponent text_instr
      letterHeight = 0.04
      pos = (-0.3, 0.25)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
      text [set every repeat] = Test + $experiment_conditions
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    MouseComponent mouse
      clickable = image_next
      forceEndRoutineOnPress = valid click
      saveMouseState = on click
      startVal [time (s)] = 0.0
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  Routine parse_scheduler_row
    CodeComponent code_7
      Code Type = Py
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      Before Experiment:
        import ast
      Each Frame:
        if not pause_routine:
            continueRoutine=False
      End Routine:
        force_end_routine = False

        for key,val in scheduler_csv_data.iloc[current_selection].items():
                exec(key + '=val')

        if str(task_parameters) != 'nan':
            task_parameters = ast.literal_eval(task_parameters)
        else:
            task_parameters = {}
    TextComponent parse_waiter
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.0
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  Routine begin_timer
    CodeComponent code_10
      Code Type = Auto->JS
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      Begin Routine:
        timer = core.CountdownTimer(duration)
  Routine start_routine_trigger
    ParallelOutComponent p_port_x_send_5
      address = 0x3FF8
      register = EIO
      startData = start_trigger
      startVal [time (s)] = 0
      stopVal [duration (s)] = 0.01
      syncScreen = True
      syncScreenRefresh = False
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  Routine end_routine_trigger
    ParallelOutComponent p_port_x_send_8
      address = 0x3FF8
      register = EIO
      startData = end_trigger
      startVal [time (s)] = 0
      stopVal [duration (s)] = .01
      syncScreen = True
      syncScreenRefresh = False
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  Routine increment_selection
    CodeComponent code_12
      Code Type = Auto->JS
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      Begin Routine:
        import asyncio
        import websockets

        async def increment():
            async with websockets.connect('ws://localhost:8000') as websocket:
                await websocket.send("next")
                response = await websocket.recv()
                print(response)
        if not force_end_routine and not pause_routine: # if user didn't give input
            asyncio.get_event_loop().run_until_complete(increment())
  Routine acquisition_end
    CodeComponent code
      Code Type = Auto->JS
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      Begin Routine:
        timer = core.CountdownTimer(duration)
      Each Frame:
        if force_end_routine or timer.getTime() <= 0:
            continueRoutine=False
            acq_end.finished=True
    TextComponent acquisition_end_text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [condition] = timer.getTime() <= -.01
      text [set every frame] = $str(round(timer.getTime(),2)) + '\n' + "Acquisition ending"
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  Routine acquisition_start
    CodeComponent code_11
      Code Type = Auto->JS
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      Begin Routine:
        timer = core.CountdownTimer(duration)
      Each Frame:
        if force_end_routine or timer.getTime() <= 0:
            continueRoutine=False
            acq_start.finished=True
    TextComponent acq_start_text
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.0
      text [set every frame] = $str(round(timer.getTime(),2)) + '\n' + "Acquisition starting"
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  Routine end_experiment
    CodeComponent code_13
      Code Type = Auto->JS
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      Begin Routine:
        core.quit()
  Routine wait
    CodeComponent code_9
      Code Type = Auto->JS
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      Begin Routine:
        timer = core.CountdownTimer(duration)
      Each Frame:
        if force_end_routine and duration==0:
            continueRoutine=False
            wait_block.finished=True
        elif duration > 0 and (force_end_routine or timer.getTime() <= 0):
            continueRoutine=False
            wait_block.finished=True
    TextComponent wait_text
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Waiting for experimenter
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    KeyboardComponent key_resp_stop_wait
      allowedKeys = 'space'
      disabled = True
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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  Routine stillface_trial
    CodeComponent code_3
      Code Type = Auto->JS
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      Begin Routine:
        win.setColor('white')
        stillface_time = task_parameters['stillface_time']
      Each Frame:
        if force_end_routine or timer.getTime() <= 0:
            continueRoutine=False
            stillface_trials.finished=True
    TextComponent trial_text
      color = black
      font = Times New Roman
      letterHeight = 0.1
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $stillface_time
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    KeyboardComponent key_resp_4
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $stillface_time
      store = nothing
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  Routine setup_face
    CodeComponent code_14
      Code Type = Auto->JS
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      Begin Routine:
        import random
        total_time = task_parameters['total_time'] # seconds
        facepresent_time = task_parameters['facepresent_time']  # seconds
        num_faces = total_time/facepresent_time # has to be a round number
  Routine fixation_face
    CodeComponent code_4
      Code Type = Auto->JS
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      Begin Routine:
        trial_n = 0
        n_files = task_parameters['n_files']
        face_n = list(range(0,n_files))
        random.shuffle(face_n)
    TextComponent text
      color = black
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text = * * * *
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  Routine face_present
    CodeComponent code_2
      Code Type = Py
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      Begin Routine:
        race_condition = task_parameters['race_condition']

        image_present = "face_stim/" + race_condition + str(face_n[trial_n]) + ".jpg"

        while image_present in presented_images:
            random.shuffle(face_n)
            image_present = "face_stim/" + race_condition + str(face_n[trial_n]) + ".jpg"


        presented_images.append(image_present)
      Each Frame:
        if force_end_routine or timer.getTime() <= 0:
            continueRoutine=False
            raceface_trials.finished=True
      End Routine:
        trial_n += 1
    ImageComponent raceface_image
      image [set every repeat] = $image_present
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $facepresent_time
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  Routine setup_cb
    CodeComponent code_setup
      Code Type = Py
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      Begin Routine:
        import sys
        import random
        import serial
        import os
        import time

        paths = [d for d in os.listdir('images') if d[1:3]=='to']
        throw={}
        for p in paths:
            imgs = [f for f in os.listdir('images/%s' % p) if f.endswith('.bmp')]
            # sort image filenames to get correct sequence of throw steps
            throw[p]= sorted(imgs)

        def select_player_image(fromP, toP, s):
            key = "%ito%i" % (fromP,toP)

            player_img = ('images/%s/%s-%s.bmp' % (key, key, s))
            return player_img

        def select_throw(holder, block_threshold, keypress):
            if holder==2:
                #got_ball_time = trialClock.getTime()

                #choice=[]
                #while len(choice)==0 or choice [0] not in ('num_4','num_add', '4' ,'+'):
                #choice = event.getKeys(keyList=['num_4', 'num_add', '4' ,'+'])
                choice = keypress
                #if (choice[0]=='num_4' or choice[0]=='4'):
                if (choice=='num_4' or choice=='4'):
                    throwTo=1
                elif (choice=='num_add' or choice=='+'):
                    throwTo=3
            else:
                throwChoice = random.random()
                if throwChoice > block_threshold:
                    if holder==1:
                        throwTo=3
                    else:
                        throwTo=1
                else:
                    throwTo=2

            return holder, throwTo
  Routine cb_instruct_1
    CodeComponent code_6
      Code Type = Auto->JS
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      Begin Routine:
        game_i = 1
      Each Frame:
        if force_end_routine or timer.getTime() <= 0:
            continueRoutine=False
            cyberball_practice2.finished=True
      End Routine:
        print("first key press", key_resp_2.keys)
    TextComponent text_2
      color = black
      letterHeight = 0.06
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        In the upcoming task, we will test the effects of practicing mental visualization on task performance. Thus, we need you to practice your mental visualization skills. We have found that the best way to do this is to have you play an on-line ball tossing game with other participants who are logged on to the system at the same time.

        Press any key to continue.
    KeyboardComponent key_resp_2
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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  Routine cb_instruct_2
    TextComponent text_3
      color = black
      letterHeight = 0.06
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        The game is very simple. When the ball is tossed to you, simply press either the "red" button to throw to the player on your left or the "blue" button to throw to the player on your right. When the game is over, the experimenter will give you additional instructions.

        What is important is not your ball tossing performance, but that you MENTALLY VISUALIZE the entire experience. Imagine what the others look like. What sort of people are they? Where are you playing? Is it warm and sunny or cold and rainy? Create in your mind a complete mental picture of what might be going on if you were playing this game in real life.

        Press any key to continue.
    KeyboardComponent key_resp_6
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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    CodeComponent code_26
      Code Type = Auto->JS
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      Each Frame:
        if force_end_routine or timer.getTime() <= 0:
            continueRoutine=False
            cyberball_practice2.finished=True
      End Routine:
        print("second key press", key_resp_6.keys)
  Routine cb_practice_start
    TextComponent text_28
      color = black
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        Let's begin the practice. Remember, when it's your turn to throw, press the red button to throw to Player 2 and the blue button to throw the ball to Player 3.

        Press any key to start.
    KeyboardComponent key_resp_7
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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    CodeComponent code_24
      Code Type = Auto->JS
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      Begin Routine:
        block_threshold = task_parameters['block_threshold']
      Each Frame:
        if force_end_routine or timer.getTime() <= 0:
            continueRoutine=False
            cyberball_practice2.finished=True
      End Routine:
        print("third key press", key_resp_7.keys)
  Routine prac_cb_1
    CodeComponent code_16
      Code Type = Auto->JS
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      Begin Routine:
        if force_end_routine or timer.getTime() <= 0:
            continueRoutine=False
            cyberball_practice2.finished=True


        holder = 1
        player_img = "images/start.bmp"
      Each Frame:
        if force_end_routine or timer.getTime() <= 0:
            continueRoutine=False
            #cyberball_practice1.finished=True
            cyberball_practice2.finished=True
    ImageComponent start_3
      color = 1.0000, 1.0000, 1.0000
      image [set every repeat] = $player_img
      interpolate = nearest
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.5
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    TextComponent text_20
      color = black
      letterHeight = 0.05
      pos = (-.2, .25)
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.5
      text = Player 2
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    TextComponent text_21
      color = black
      letterHeight = 0.05
      pos = (.2, .25)
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.5
      text = Player 3
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  Routine prac_cb_4
    CodeComponent code_17
      Code Type = Auto->JS
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      Begin Routine:
        if force_end_routine or timer.getTime() <= 0:
            continueRoutine=False
            #cyberball_practice1.finished=True
            cyberball_practice2.finished=True
            #prac_cb_trials.finished=True
            #prac_cb_trials_2.finished=True
      Each Frame:
        if force_end_routine or timer.getTime() <= 0:
            continueRoutine=False
            cyberball_practice1.finished=True
            cyberball_practice2.finished=True
            prac_cb_trials_2.finished=True
      End Routine:
        holder = next_holder
        s = 1
    ImageComponent image_6
      image [set every repeat] = $player_img
      interpolate = nearest
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = .15
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    TextComponent text_26
      color = black
      letterHeight = 0.05
      pos = (-.2, .25)
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = .15
      text = Player 2
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    TextComponent text_27
      color = black
      letterHeight = 0.05
      pos = (.2, .25)
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = .15
      text = Player 3
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  Routine cb_practice_end
    TextComponent text_29
      color = black
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        You have finished the practice.

        Press any key to continue.
    KeyboardComponent key_resp_8
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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  Routine cb_loading
    TextComponent text_12
      color = black
      letterHeight = 0.05
      pos = (0, .2)
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 8
      text = Loading...
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    TextComponent text_13
      color = black
      letterHeight = 0.05
      pos = (0, .1)
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5
      text = Finding other players...
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    TextComponent text_14
      color = black
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0
      stopVal [duration (s)] = 8
      text = Player 1: You
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    TextComponent text_17
      color = black
      letterHeight = 0.05
      pos = (0, -.1)
      saveStartStop = False
      startVal [time (s)] = 3
      stopVal [duration (s)] = 5
      text = Player 2 found!
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    TextComponent text_15
      color = black
      letterHeight = 0.05
      pos = (0, -.2)
      saveStartStop = False
      startVal [time (s)] = 5
      stopVal [duration (s)] = 3
      text = Player 3 found!
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    TextComponent text_16
      color = black
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 8
      stopVal [duration (s)] = 5
      text = Get ready to begin!
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    CodeComponent code_25
      Code Type = Auto->JS
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      Begin Routine:
        block_threshold = task_parameters['block_threshold']
      Each Frame:
        if force_end_routine or timer.getTime() <= 0:
            continueRoutine=False
            cyberball_trials.finished=True
  Routine cyberball_1
    CodeComponent code_5
      Code Type = Auto->JS
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      Begin Routine:
        holder = 1
        player_img = "images/start.bmp"
      Each Frame:
        if force_end_routine or timer.getTime() <= 0:
            continueRoutine=False
            cb_game_block.finished=True
            cyberball_trials.finished=True
    ImageComponent start
      color = 1.0000, 1.0000, 1.0000
      image [set every repeat] = $player_img
      interpolate = nearest
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.5
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    TextComponent text_8
      color = black
      letterHeight = 0.05
      pos = (-.2, .25)
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.5
      text = Player 2
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    TextComponent text_9
      color = black
      letterHeight = 0.05
      pos = (.2, .25)
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.5
      text = Player 3
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  Routine cyberball_2
    CodeComponent code_18
      Code Type = Py
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      Begin Routine:
        s = 1
        img_length = 10000

        if holder != 2:
            core.wait(random.randint(500, 3500)/1000)
            img_length = .2

        #print("current holder: ", holder, "next_holder: ", next_holder, "Key: ", "%ito%i" % (holder,next_holder), "nreps:", nreps)
      Each Frame:

        if force_end_routine or timer.getTime() <= 0:
            continueRoutine=False
            cb_trials_2.finished = True
            cb_game_block.finished=True
            cyberball_trials.finished=True

        #if (holder == 2) and (cb_key_resp.keys == 'num_4' or cb_key_resp.keys == 'num_add'):
        #    continueRoutine = False
      End Routine:
        player = select_throw(holder, block_threshold, cb_key_resp.keys)
        holder = player[0]
        next_holder = player[1]

        player_img = select_player_image(holder, next_holder, s)

        nreps = len(throw["%ito%i" % (holder,next_holder)])
    ImageComponent image_2
      image [set every repeat] = $player_img
      interpolate = nearest
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $img_length
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    KeyboardComponent cb_key_resp
      allowedKeys = 'num_4','num_add'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $img_length
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    TextComponent text_4
      color = black
      letterHeight = 0.05
      pos = (-.2, .25)
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $img_length
      text = Player 2
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    TextComponent text_5
      color = black
      letterHeight = 0.05
      pos = (.2, .25)
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $img_length
      text = Player 3
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  Routine cyberball_3
    CodeComponent code_19
      Code Type = Auto->JS
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      Begin Routine:
        player_img = select_player_image(holder, next_holder, s)
      Each Frame:
        if force_end_routine or timer.getTime() <= 0:
            continueRoutine=False
            cb_trials.finished = True
            cb_trials_2.finished = True
            cb_game_block.finished=True
            cyberball_trials.finished=True
      End Routine:
        s+=1
    TextComponent text_6
      color = black
      letterHeight = 0.05
      pos = (-.2, .25)
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = .15
      text = Player 2
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    TextComponent text_10
      color = black
      letterHeight = 0.05
      pos = (.2, .25)
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = .15
      text = Player 3
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    ImageComponent image_3
      image [set every repeat] = $player_img
      interpolate = nearest
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = .15
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  Routine cyberball_4
    CodeComponent code_20
      Code Type = Auto->JS
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      Each Frame:
        if force_end_routine or timer.getTime() <= 0:
            continueRoutine=False
            cb_trials_2.finished = True
            cb_game_block.finished=True
            cyberball_trials.finished=True
      End Routine:
        holder = next_holder
        s = 1
    ImageComponent image_4
      image [set every repeat] = $player_img
      interpolate = nearest
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = .15
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    TextComponent text_11
      color = black
      letterHeight = 0.05
      pos = (-.2, .25)
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = .15
      text = Player 2
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    TextComponent text_18
      color = black
      letterHeight = 0.05
      pos = (.2, .25)
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = .15
      text = Player 3
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  Routine cb_game_end
    TextComponent text_19
      color = black
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.0
      text [set every repeat] = $"You have reached the end of game " + str(game_i) + ".\n\n any key to continue."
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    KeyboardComponent key_resp_10
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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    CodeComponent code_21
      Code Type = Auto->JS
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      Each Frame:
        if force_end_routine or timer.getTime() <= 0:
            continueRoutine=False
            cb_game_block.finished=True
            cyberball_trials.finished=True
      End Routine:
        game_i += 1
  Routine block_end
    TextComponent text_22
      color = black
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      text [set every repeat] = $"You have reached the end of game " + str(game_i) + ".\n\n Press SPACE to continue."
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    KeyboardComponent key_resp_11
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    CodeComponent code_22
      Code Type = Auto->JS
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      End Routine:
        game_i += 1
  Routine prac_cb_2
    CodeComponent code_15
      Code Type = Py
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      Begin Routine:
        s = 1
        img_length = 10000

        if holder != 2:
            core.wait(random.randint(500, 3500)/1000)
            img_length = .2

        #if holder == 2:
        #    core.wait(0.01)
        #else:
        #    core.wait(random.randint(500, 3500)/1000)
        #    img_length = .2





        #print("current holder: ", holder, "next_holder: ", next_holder, "Key: ", "%ito%i" % (holder,next_holder), "nreps:", nreps)
      Each Frame:
        if force_end_routine or timer.getTime() <= 0:
            continueRoutine=False
            cyberball_practice2.finished=True

        #if (holder == 2) and (key_resp_12.keys == 'num_4' or  key_resp_12.keys == '4' or key_resp_12.keys == 'num_add' or  key_resp_12.keys == '+'):
        #    print("key resp", key_resp_12.keys)
        #    continueRoutine = False
      End Routine:
        player = select_throw(holder, block_threshold, key_resp_12.keys)
        holder = player[0]
        next_holder = player[1]

        player_img = select_player_image(holder, next_holder, s)

        nreps = len(throw["%ito%i" % (holder,next_holder)])
    ImageComponent image_5
      image [set every repeat] = $player_img
      interpolate = nearest
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $img_length
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    KeyboardComponent key_resp_12
      allowedKeys = 'num_4','num_add'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $img_length
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    TextComponent text_23
      color = black
      letterHeight = 0.05
      pos = (-.2, .25)
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $img_length
      text = Player 2
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    TextComponent text_24
      color = black
      letterHeight = 0.05
      pos = (.2, .25)
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $img_length
      text = Player 3
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  Routine prac_cb_3
    CodeComponent code_23
      Code Type = Auto->JS
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      Begin Routine:
        if force_end_routine or timer.getTime() <= 0:
            continueRoutine=False
            cyberball_practice1.finished=True
            cyberball_practice2.finished=True
            prac_cb_trials.finished=True
            prac_cb_trials_2.finished=True

        player_img = select_player_image(holder, next_holder, s)
      Each Frame:
        if force_end_routine or timer.getTime() <= 0:
            continueRoutine=False
            #cyberball_practice1.finished=True
            cyberball_practice2.finished=True
            #prac_cb_trials.finished=True
            #prac_cb_trials_2.finished=True
      End Routine:
        s+=1
    TextComponent text_25
      color = black
      letterHeight = 0.05
      pos = (-.2, .25)
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = .15
      text = Player 2
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    TextComponent text_30
      color = black
      letterHeight = 0.05
      pos = (.2, .25)
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = .15
      text = Player 3
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    ImageComponent image_7
      image [set every repeat] = $player_img
      interpolate = nearest
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = .15
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  Routine cb_end
    KeyboardComponent key_resp_13
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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    TextComponent text_31
      color = black
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Press any key to continue.
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  Routine prac_cb
    CodeComponent code_27
      Code Type = Py
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      Each Frame:
        if force_end_routine or timer.getTime() <= 0:
            continueRoutine=False
            cyberball_practice2.finished=True
    ImageComponent image
      image [set every repeat] = $player_img
      interpolate = nearest
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = .05
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    TextComponent text_32
      color = black
      letterHeight = 0.05
      pos = (-.2, .25)
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = .05
      text = Player 2
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    TextComponent text_33
      color = black
      letterHeight = 0.05
      pos = (.2, .25)
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = .05
      text = Player 3
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  Routine cyberball_5
    CodeComponent code_28
      Code Type = Py
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      Each Frame:

        if force_end_routine or timer.getTime() <= 0:
            continueRoutine=False
            cb_trials_2.finished = True
            cb_game_block.finished=True
            cyberball_trials.finished=True
    ImageComponent image_8
      image [set every repeat] = $player_img
      interpolate = nearest
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = .05
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    TextComponent text_34
      color = black
      letterHeight = 0.05
      pos = (-.2, .25)
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = .05
      text = Player 2
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    TextComponent text_35
      color = black
      letterHeight = 0.05
      pos = (.2, .25)
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = .05
      text = Player 3
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  Routine cb_instruct_3
    CodeComponent code_29
      Code Type = Auto->JS
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      Begin Routine:
        game_i = 1
      Each Frame:
        if force_end_routine or timer.getTime() <= 0:
            continueRoutine=False
            cyberball_practice2.finished=True
      End Routine:
        print("first key press", key_resp_2.keys)
    TextComponent text_36
      color = black
      letterHeight = 0.06
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        In a few moments, you will be playing a ball-tossing game with other players over our network. Several universities in the state of New York are taking part in a collaborative investigation of the effects of mental visualization on task performance, with people participating at several different universities around the state of New York.

        Press any key to continue.
    KeyboardComponent key_resp_9
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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Flow
  Routine setup
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = $expInfo['scheduler csv']
    loopType = sequential
    nReps = 999
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    Routine parse_scheduler_row
    LoopInitiator acq_start loopType="TrialHandler"
      loopType = random
      nReps = sum([task_type=='acq_start'])
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      Routine start_routine_trigger
      Routine acquisition_start
      Routine end_routine_trigger
    LoopTerminator acq_start
    LoopInitiator acq_end loopType="TrialHandler"
      loopType = random
      nReps = sum([task_type=='acq_end'])
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      Routine start_routine_trigger
      Routine acquisition_end
      Routine end_routine_trigger
      Routine end_experiment
    LoopTerminator acq_end
    LoopInitiator wait_block loopType="TrialHandler"
      loopType = sequential
      nReps = sum([task_type=='wait'])
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      Routine start_routine_trigger
      Routine wait
      Routine end_routine_trigger
    LoopTerminator wait_block
    LoopInitiator stillface loopType="TrialHandler"
      loopType = random
      nReps = sum([task_type=='stillface'])
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      Routine begin_timer
      Routine start_routine_trigger
      LoopInitiator stillface_trials loopType="TrialHandler"
        loopType = sequential
        nReps = 1
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        Routine stillface_trial
      LoopTerminator stillface_trials
      Routine end_routine_trigger
    LoopTerminator stillface
    LoopInitiator raceface loopType="TrialHandler"
      loopType = random
      nReps = sum([task_type=='raceface'])
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      Routine setup_face
      Routine begin_timer
      Routine start_routine_trigger
      Routine fixation_face
      LoopInitiator raceface_trials loopType="TrialHandler"
        loopType = random
        nReps = num_faces
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        Routine face_present
      LoopTerminator raceface_trials
      Routine end_routine_trigger
    LoopTerminator raceface
    LoopInitiator cyberball_practice1 loopType="TrialHandler"
      loopType = random
      nReps = sum([task_type=='cyberball_practice'])
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      Routine setup_cb
      Routine begin_timer
      Routine start_routine_trigger
      LoopInitiator cyberball_practice2 loopType="TrialHandler"
        loopType = random
        nReps = 1
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        Routine cb_instruct_1
        Routine cb_instruct_3
        Routine cb_instruct_2
        Routine cb_practice_start
        Routine prac_cb_1
        LoopInitiator prac_cb_trials_2 loopType="TrialHandler"
          loopType = random
          nReps = task_parameters['cb_throws']
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          Routine prac_cb_2
          Routine prac_cb
          LoopInitiator prac_cb_trials loopType="TrialHandler"
            loopType = random
            nReps = nreps
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            Routine prac_cb_3
          LoopTerminator prac_cb_trials
          Routine prac_cb_4
        LoopTerminator prac_cb_trials_2
      LoopTerminator cyberball_practice2
      Routine end_routine_trigger
      Routine cb_practice_end
    LoopTerminator cyberball_practice1
    LoopInitiator cyberball loopType="TrialHandler"
      loopType = random
      nReps = sum([task_type=='cyberball'])
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      Routine setup_cb
      Routine begin_timer
      Routine start_routine_trigger
      LoopInitiator cyberball_trials loopType="TrialHandler"
        loopType = random
        nReps = 1
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        Routine cb_loading
        LoopInitiator cb_game_block loopType="TrialHandler"
          loopType = sequential
          nReps = 1
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          Routine cyberball_1
          LoopInitiator cb_trials_2 loopType="TrialHandler"
            loopType = random
            nReps = task_parameters['cb_throws']
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            Routine cyberball_2
            Routine cyberball_5
            LoopInitiator cb_trials loopType="TrialHandler"
              loopType = random
              nReps = nreps
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              Routine cyberball_3
            LoopTerminator cb_trials
            Routine cyberball_4
          LoopTerminator cb_trials_2
          Routine cb_game_end
        LoopTerminator cb_game_block
      LoopTerminator cyberball_trials
      Routine end_routine_trigger
      Routine cb_end
    LoopTerminator cyberball
    Routine increment_selection
  LoopTerminator trials
  Routine end
